PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -1.0000, -1.0000
  expName = Rest_mood
  keyboardBackend = ioHub
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Routines
  Routine Rest_Intro
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    KeyboardComponent Start_ButtonPress
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    TextComponent Rest_Intro_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Bitte warten Sie, bis der Versuchsleiter die Ruhemessung startet.
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  Routine Rest_Fixation
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    PolygonComponent Rest_fix_cross
      fillColor = white
      shape = cross
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 310
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  Routine Mood_Scale
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    TextComponent Q_scale_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Auf einer Skala von 1 bis 10, wie würden Sie Ihre Stimmung heute bewerten?



        1     2     3     4      5     6     7     8     9     10
    KeyboardComponent Q_scale_ButtonPress
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
      store = first key
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    TextComponent Q_unglucklich_text
      letterHeight = 0.03
      pos = (-0.5, -0.1)
      startVal [time (s)] = 0.0
      text = Sehr unglücklich
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    TextComponent Q_glucklich_text
      letterHeight = 0.03
      pos = (0.5, -0.1)
      startVal [time (s)] = 0.0
      text = Sehr glücklich
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  Routine Mood_Describe
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    TextComponent Q_describe_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Wenn Sie an heute denken, wie würden Sie Ihre Stimmung beschreiben (z.B. glücklich, traurig, gestresst)?

        Welche Gefühle beschreiben Ihren aktuellen Zustand am Besten?
    KeyboardComponent Q_describe_ButtonPress
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
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  Routine Mood_Influenced
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    TextComponent Q_influenced_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Hat irgendetwas Bestimmtes Ihre Stimmung heute beeinflusst?

        Wenn ja, bitte beschreiben.
    KeyboardComponent Q_influenced_ButtonPress
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
      store = first key
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  Routine Mood_TasksToday
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    TextComponent Q_taskToday_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Was haben Sie heute gemacht/heute noch vor? 
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    KeyboardComponent Q_taskToday_ButtonPress
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 90
      store = first key
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  Routine Mood_End
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    TextComponent Mood_end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ende der Fragen.

        Bitte geben Sie der Versuchsleiterin Bescheid.

        Vielen Dank.
    KeyboardComponent Mood_end_buttonPress
      allowedKeys = 'p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Mood_Intro
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    TextComponent Mood_intro_text
      letterHeight = 0.05
      startVal [time (s)] = 3
      stopVal [time (s)] = 10
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      text:
        Es folgen nun 4 Fragen zu Ihrem momentanen Gemütszustand.

        Bitte beantworten Sie die Fragen verbal.
    TextComponent Ende_ruhemessung_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Ende der Ruhemessung
Flow
  Routine Rest_Intro
  Routine Rest_Fixation
  Routine Mood_Intro
  Routine Mood_Scale
  Routine Mood_Describe
  Routine Mood_Influenced
  Routine Mood_TasksToday
  Routine Mood_End
